CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "png")
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    Name to assign these objects:Cell
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "png")
    Name to assign these images:dic
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureObjectSizeShape:[module_num:5|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
    Select object sets to measure:Cell
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

TrackObjects:[module_num:6|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
    Choose a tracking method:LAP
    Select the objects to track:Cell
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    Select display option:Color and Number
    Save color-coded image?:No
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    Select the movement model:Both
    Number of standard deviations for search radius:50.0
    Search radius limit, in pixel units (Min,Max):10.0,100.0
    Run the second phase of the LAP algorithm?:Yes
    Gap closing cost:50
    Split alternative cost:1
    Merge alternative cost:1
    Maximum gap displacement, in pixel units:100
    Maximum split score:1
    Maximum merge score:1
    Maximum temporal gap, in frames:5
    Filter objects by lifetime?:No
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    Mitosis alternative cost:100
    Maximum mitosis distance, in pixel units:200
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
SaveImages:[module_num:7|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:TrackedCells
    Select method for constructing file names:From image filename
    Select image name for file prefix:dic
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:track
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\\\seg
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToDatabase:[module_num:8|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:cell_track.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Cell
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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